PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Data filename = u'../01_roughxpmbt_data/00_roughxpmbt_psychopy/%s_%s_%s/%s_%s_%s' % (expName, expInfo['date'], expInfo['subject'], expName, expInfo['date'], expInfo['subject'])
  Experiment info = {'subject': '', 'serial port': 'COM', 'trial number': '50'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [2560, 1440]
  expName = roughxpmbt
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
    CodeComponent oddball
      Code Type = Py
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      Before Experiment:
        from random import sample, randint
      Begin Experiment:
        nb_conditions = 3
        nb_trials = nb_conditions * int(expInfo["trial number"])
        percentage_oddballs = 20

        nb_oddballs = round(percentage_oddballs/100 * nb_trials)

        oddball_index_2n = sorted(sample(range(nb_trials), 2*nb_oddballs))
        selection = list(range(randint(0,1), 2 * nb_oddballs, 2))
        oddball_index = [oddball_index_2n[index] for index in selection]

        oddballs = [False] * nb_trials
        for index in oddball_index :
            oddballs[index] = True
      Begin Routine:
        print("trial number: ", trials_loop.thisN)

        oddball = oddballs.pop()
        print("is it an oddball ? ", oddball)

        if oddball is True:
            oddball_sound_file = sample(trials_loop.trialList, 1)[0]['sound_file']
            while oddball_sound_file == sound_file:
                oddball_sound_file = sample(trials_loop.trialList, 1)[0]['sound_file']
        else:
            oddball_sound_file = sound_file

        print("sound1: ", sound_file)
        print("sound2: ", oddball_sound_file)
      End Routine:
        thisExp.addData('sound1', sound_file)
        thisExp.addData('sound2', oddball_sound_file)
        thisExp.addData('is_oddball', oddball)
    CodeComponent trigger
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import serial
      Begin Experiment:
        def send_triggers(value):
            ser.write(value)
            outlet.push_sample(value)

        ser = serial.Serial()
        ser.port = expInfo['serial port']
        ser.open()

        # Creating the LSL stream:
        info = StreamInfo(name='lsltriggerstream', type='Markers', channel_count=1, channel_format='int32') #Initialize LSL stream for markers
        outlet = StreamOutlet(info)  # Broadcast the stream.
      Begin Routine:
        # trigger managment
        trigger1 = str(sound_file)[11:13]
        print("trigger1: ", trigger1)

        trigger2 = str(oddball_sound_file)[11:13]
        print("trigger2: ", trigger2)
      Each Frame:
        # trigger managment
        if sound1.status == NOT_STARTED and tThisFlip >= 1-frameTolerance:
            win.callOnFlip(send_triggers, [int(trigger1)])

        # trigger managment
        if sound2.status == NOT_STARTED and tThisFlip >= 3-frameTolerance:
            win.callOnFlip(send_triggers, [int(trigger2)])
      End Experiment:
        ser.close()
    CodeComponent trigger_hardware
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        # setting up the serial port
        import serial
        ser = serial.Serial()
        ser.port = expInfo['serial port']
        ser.baudrate = 115200
        ser.bytesize = serial.EIGHTBITS
        ser.parity = serial.PARITY_EVEN
        ser.stopbits=serial.STOPBITS_ONE
        ser.timeout = None
        ser.xonxoff = False
        ser.rtscts = False
        ser.write_timeout = None
        ser.dsrdt = False
        ser.inter_byte_timeout = None
        ser.exclusive = None
        ser.open()
        ser.write([0x00])
        print("successful connexion to the headset")
      Begin Routine:
        # trigger managment
        trigger1 = str(sound_file)[11:13]
        print("trigger1: ", trigger1)

        trigger2 = str(oddball_sound_file)[11:13]
        print("trigger2: ", trigger2)
      Each Frame:
        # trigger managment
        if sound1.status == NOT_STARTED and tThisFlip >= 1-frameTolerance:
            win.callOnFlip(ser.write, [int(trigger1)])

        # trigger managment
        if sound2.status == NOT_STARTED and tThisFlip >= 3-frameTolerance:
            win.callOnFlip(ser.write, [int(trigger2)])
      End Experiment:
        ser.close()
    TextComponent isi1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound1
      hamming = False
      sound [set every repeat] = $sound_file
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      volume = thisVol
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    TextComponent fix1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent isi2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    SoundComponent sound2
      hamming = False
      sound [set every repeat] = $oddball_sound_file
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      volume = thisVol
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    TextComponent fix2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = +
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "neutre", "acceptable", "gênant", "insupportable", "horrible"
      letterHeight = 0.025
      size = (1.0, 0.05)
      startVal [time (s)] = 4
      storeHistory = True
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine end
    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Merci pour votre participation
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  Routine set_volume
    CodeComponent changeVol
      Code Type = Auto->JS
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      Begin Experiment:
        thisVol = .3
      End Routine:
        maxVol = 1
        minVol = 0
        stepSize = .5

        if mouse.clicked_name[0]=='upButton':
            if thisVol + stepSize >= maxVol:
                thisVol = maxVol
            else:
                thisVol += stepSize

        if mouse.clicked_name[0]=='downButton':
            if thisVol - stepSize <= minVol:
                thisVol = minVol
            else:
                thisVol -= stepSize

        elif mouse.clicked_name[0]=='submitButton':
            print('psychopy volume set to ', thisVol)
            volume_check_loop.finished = True # end this loop

        thisExp.addData('thisVol', thisVol)
    SoundComponent sound_test
      hamming = False
      saveStartStop = False
      sound = 02_stimuli/90Hz.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = thisVol
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    TextComponent upButton
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        cliquer ici
        pour augmenter
        le volume
    TextComponent downButton
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        cliquer ici
        pour diminuer
        le volume
    TextComponent showVol
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'le volume sonore est à : ' + str(int(thisVol*100)) +'%'
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    MouseComponent mouse
      clickable = upButton, submitButton, replay
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent submitButton
      color = black
      letterHeight = 0.05
      pos = (0,-.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = cliquez ici si le volume est supportable
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    TextComponent replay
      color = black
      letterHeight = 0.05
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        cliquez ici
        pour réécouter
  Routine start
    TextComponent instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Pour commencez,
        faites un clic droit
        sur la souris
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vous allez entendre des sons.
        Lorsqu'une échelle apparaît,
        veuillez noter les sons que vous avez entendus parmis :
        "neutre", "acceptable", "gênant", "insupportable", "horrible"

        Lorsque vous êtes prêts,
        faites un clic droit avec la souris
Flow
  Routine start
  LoopInitiator volume_check_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 100
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    Routine set_volume
  LoopTerminator volume_check_loop
  Routine instructions
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = 01_setup-code/roughxpmbt_trials_loop_conditionsfile.xlsx
    loopType = random
    nReps = expInfo['trial number']
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    conditions:
      [{'sound_file': '02_stimuli\\10Hz.wav'},
      {'sound_file': '02_stimuli\\20Hz.wav'},
      {'sound_file': '02_stimuli\\30Hz.wav'},
      {'sound_file': '02_stimuli\\40Hz.wav'},
      {'sound_file': '02_stimuli\\60Hz.wav'},
      {'sound_file': '02_stimuli\\80Hz.wav'},
      {'sound_file': '02_stimuli\\90Hz.wav'}]
    Routine trial
  LoopTerminator trials_loop
  Routine end
